// ********** Image Types

(FixedInternalImagePixelType "short")
(FixedImageDimension 3)
(MovingInternalImagePixelType "short")
(MovingImageDimension 3)


// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "LinearInterpolator")
(ResampleInterpolator "FinalLinearInterpolator")
(Metric "NormalizedMutualInformation")
//(Metric "AdvancedNormalizedCorrelation")
(Optimizer "AdaptiveStochasticGradientDescent")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 3)
(ImagePyramidSchedule 8 8 8 4 4 4 2 2 2)

// ********** Transform

(FinalGridSpacingInPhysicalUnits 12.0 12.0 16.0)
(GridSpacingSchedule  8.0 4.0 2.0)
(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 500)


// For fast testing:
(NumberOfJacobianMeasurements 2500 5000 10000)

(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")


// ********** Metric

(NumberOfHistogramBins 64)
(FixedKernelBSplineOrder 0)
(MovingKernelBSplineOrder 3)


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "true")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "false")
(ResultImageFormat "mha")
(ShowExactMetricValue "false")
(ErodeMask "false")
(UseDirectionCosines "true")
(CheckNumberOfSamples "false")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 30000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")
//(SampleRegionSize 50.0 50.0 50.0)
(MaximumNumberOfSamplingAttempts 5)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

